PsychoPy2experiment version="2020.1.1"
Settings
  Completed URL = $"https://uci.sona-systems.com/webstudy_credit.aspx?experiment_id=984&credit_token=79a52fb4afd94c29a4977992b5dbd297&survey_code="+expInfo['participant']
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://uci.sona-systems.com/default.aspx?p_return_experiment_id=984
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 3.2
  Window size (pixels) = [1280, 720]
  color = $[1.000,1.000,1.000]
  expName = trial
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Routines
  Routine Instructions
    TextComponent MainInstruction
      color [set every repeat] = $TextColor
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = $WrapAmount
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      text:
        Main Instructions:
        In this study you will be asked about your preferences for different sandwiches!

        On each trial you will be presented with the ingredients for two different sandwiches, and asked to indicate which sandwich you would prefer to order and eat. You cannot add or remove any ingredients from any of the sandwiches. The ingredients will only be the ingredients in the sandwich, not the bread the sandwich is on, so you can imagine that these sandwiches are on any type of bread you would like.

        There will be 80 trials which involve making selections between these sandwiches, and there is a trial counter in the bottom right corner of the screen. When you are halfway through there will be an option for a 3 minute break if needed.

        There are 40 different sandwiches, so you will only ever see the same sandwich two times in the whole study.

        Press "space" to continue
    KeyboardComponent Past_Instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine End
    TextComponent text_2
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.65
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      text:
        You must hit ENTER for your data to save and for you to automatically receive credit on SONA.

        If you do not automatically receive credit for this study it will be granted to you within 3 business days.

        If you have any follow up comments or questions please email roberjt1@uci.edu

        You are now finished with this study and may hit enter to save your data. Once data is saved hit 'ok' on the box to be redirected to SONA.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Initialize
    CodeComponent SetParams
      Code Type = Both
      Begin JS Routine:
        MaxIng=IngsInRow
        Count=0
        TrialCount=TrialCount+1
        TakeBreak=0

        if (TrialCount==(NumOfTrials/2)){
            TakeBreak=1
            }

        filler='________________\n'
        tabs=' '
        SandwichText1=[filler+tabs+s11+'\n\n\n\n\n\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n\n\n\n\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n\n\n\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n'+tabs+s14+'\n\n\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n'+tabs+s14+'\n'+tabs+s15+'\n\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n'+tabs+s14+'\n'+tabs+s15+'\n'+tabs+s16+'\n\n',filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n'+tabs+s14+'\n'+tabs+s15+'\n'+tabs+s16+'\n'+tabs+s17+'\n'+tabs,filler+tabs+s11+'\n'+tabs+s12+'\n'+tabs+s13+'\n'+tabs+s14+'\n'+tabs+s15+'\n'+tabs+s16+'\n'+tabs+s17+'\n'+tabs+s18]
        SandwichText2=[filler+tabs+s21+'\n\n\n\n\n\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n\n\n\n\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n\n\n\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n'+tabs+s24+'\n\n\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n'+tabs+s24+'\n'+tabs+s25+'\n\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n'+tabs+s24+'\n'+tabs+s25+'\n'+tabs+s26+'\n\n',filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n'+tabs+s24+'\n'+tabs+s25+'\n'+tabs+s26+'\n'+tabs+s27+'\n'+tabs,filler+tabs+s21+'\n'+tabs+s22+'\n'+tabs+s23+'\n'+tabs+s24+'\n'+tabs+s25+'\n'+tabs+s26+'\n'+tabs+s27+'\n'+tabs+s28]

        CountText='Trial: '+TrialCount+' of '+NumOfTrials
      Begin Routine:
        #Copy to JS
        MaxIng=IngsInRow
        Count=0
        TrialCount=TrialCount+1
        TakeBreak=0

        #Requires translation, see side
        if TrialCount== (NumOfTrials/2):
            TakeBreak=1

        #Requires changes, remove str
        filler=str('________________\n')
        tabs=str(' ')
        SandwichText1=[filler+str(tabs+s11)+str('\n')*7,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n')*6,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n')*5,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n'+tabs)+str(s14)+str('\n')*4,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n'+tabs)+str(s14)+str('\n'+tabs)+str(s15)+str('\n')*3,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n'+tabs)+str(s14)+str('\n'+tabs)+str(s15)+str('\n'+tabs)+str(s16)+str('\n')*2,filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n'+tabs)+str(s14)+str('\n'+tabs)+str(s15)+str('\n'+tabs)+str(s16)+str('\n'+tabs)+str(s17)+str('\n'+tabs),filler+str(tabs+s11)+str('\n'+tabs)+str(s12)+str('\n'+tabs)+str(s13)+str('\n'+tabs)+str(s14)+str('\n'+tabs)+str(s15)+str('\n'+tabs)+str(s16)+str('\n'+tabs)+str(s17)+str('\n'+tabs)+str(s18)]
        SandwichText2=[filler+str(tabs+s21)+str('\n')*7,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n')*6,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n')*5,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n'+tabs)+str(s24)+str('\n')*4,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n'+tabs)+str(s24)+str('\n'+tabs)+str(s25)+str('\n')*3,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n'+tabs)+str(s24)+str('\n'+tabs)+str(s25)+str('\n'+tabs)+str(s26)+str('\n')*2,filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n'+tabs)+str(s24)+str('\n'+tabs)+str(s25)+str('\n'+tabs)+str(s26)+str('\n'+tabs)+str(s27)+str('\n'+tabs),filler+str(tabs+s21)+str('\n'+tabs)+str(s22)+str('\n'+tabs)+str(s23)+str('\n'+tabs)+str(s24)+str('\n'+tabs)+str(s25)+str('\n'+tabs)+str(s26)+str('\n'+tabs)+str(s27)+str('\n'+tabs)+str(s28)]

        CountText='Trial: '+str(TrialCount)+' of '+str(NumOfTrials)
  Routine PresentSandMain
    CodeComponent TrialCode
      Code Type = Auto->JS
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      Begin Routine:
        #Copy straight
        Count=Count+1

        #Translate to JS
        if Count <= MaxIng:
            InstructionText="Which of these two sandwiches would you rather order?\n"+"Press 'space' to see more ingredients.\nPress 'A' for Sandwich 1, press 'L' for Sandwich 2"+str('\n')
            InstructionAllIng=""
            if Flip[TrialCount-1]==0:
                if Count <= IngIn1:
                    IngText1=SandwichText1[Count-1]
                else:
                    IngText1=SandwichText1[IngIn1-1]
                if Count<=IngIn2:
                    IngText2=SandwichText2[Count-1]
                else:
                    IngText2=SandwichText2[IngIn2-1]
            else:
                if Count <= IngIn2:
                    IngText1=SandwichText2[Count-1]
                else:
                    IngText1=SandwichText2[IngIn2-1]
                if Count<=IngIn1:
                    IngText2=SandwichText1[Count-1]
                else:
                    IngText2=SandwichText1[IngIn1-1]


        if Count >= MaxIng:
            InstructionAllIng="All Ingredients presented"
      End Routine:
        #Translate, just if statement, True to lower case
        if (Decision.keys[0]=='a') or (Decision.keys[0]=='l'):
                Iter.finished=True
    KeyboardComponent Decision
      allowedKeys = ['a','l','space']
      forceEndRoutine = True
      startVal [time (s)] = .8
      store = all keys
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    TextComponent Sandwich1
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = SandLabelSize
      pos [set every repeat] = Label1
      startVal [time (s)] = 0.0
      text = Sandwich 1
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    TextComponent Or
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = OrSize
      pos [set every repeat] = OrPos
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Sandwich2
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = SandLabelSize
      pos [set every repeat] = Label2
      startVal [time (s)] = 0.0
      text = Sandwich 2
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    TextComponent Instr
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = InstrSize
      pos [set every repeat] = InstructionsMain
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstructionText
      wrapWidth = $WrapAmount
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    TextComponent Ingredients1
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = IngSize
      pos [set every repeat] = LeftList
      startVal [time (s)] = 0.0
      text [set every repeat] = $IngText1
      wrapWidth = 100
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    TextComponent Ingredients2
      color [set every repeat] = $TextColor
      letterHeight [set every repeat] = IngSize
      pos [set every repeat] = RightList
      startVal [time (s)] = 0.0
      text [set every repeat] = $IngText2
      wrapWidth = 100
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    TextComponent InstructionEndOfTrial
      color [set every repeat] = $[1.000,-1.000,-1.000]
      letterHeight [set every repeat] = InstrSize
      pos [set every repeat] = InstructionsFinished
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstructionAllIng
      wrapWidth = 1.65
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    TextComponent TrialCounter
      color [set every repeat] = $TextColor
      letterHeight = 0.03
      pos [set every repeat] = $CounterPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $CountText
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  Routine Study_Info_Sheet
    CodeComponent BeginExpCode
      Code Type = Auto->JS
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      Begin Experiment:
        #Copy straight to JS
        TrialCount=0
        NumOfTrials=80
        #Trial Parameters, copy to JS
        #Positions
        ListX=.43
        ListY=-.17
        LabelX=.43
        LabelY=.16
        InstructionsMain=[0,.35]
        InstructionsFinished=[0,.25]
        OrPos=[0,LabelY]
        LeftList=[-ListX,ListY]
        RightList=[ListX,ListY]
        Label1=[-LabelX,LabelY]
        Label2=[LabelX,LabelY]
        CounterPos=[.75,-.47]
        WrapAmount=1.55
        VegLoops=100
        #Other Text Param
        TextColor=[-1.000,-1.000,-1.000]
        InstrSize=.06
        IngSize=.06
        SandLabelSize=.07
        OrSize=.06



        #Requires translation
        import numpy
        Flip=numpy.random.choice([0,1],size=NumOfTrials)
      End Experiment:
        thisExp.addData('sequence',Flip)
    KeyboardComponent Info_Cont
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent TextHeader
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.038
      pos = (0, .25)
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Read through the Study Information on the following page and press 'space' to continue if you agree to participate.
        If the edges of your screen are cutting off any of the text, press 'esc' once to leave full screen mode.
        If you want to leave this study at any time, press 'esc' twice to leave full screen and be redirected to the SONA site. You will not receive credit if you leave early, but you can attempt the study again by emailing roberjt1@uci.edu
        Press 'space' to view the Study Information sheet
  Routine MidwayBreak
    TextComponent BreakText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      wrapWidth = $WrapAmount
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      text:
        This is an optional break that will last for 3 minutes.
        If you feel you don't need a break press space to continue with the experiment.
    KeyboardComponent BreakContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 180
      store = nothing
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  Routine Instructions2
    TextComponent MainInstruction_2
      color [set every repeat] = $TextColor
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = $WrapAmount
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      text:
        On each trial, you will be presented only with the first ingredient of the two sandwiches. You can press "space" to get the next ingredient for each sandwich, or you can press "A" if you would prefer to eat Sandwich 1, or "L" if you would prefer to eat Sandwich 2.

        You can continue to press "space" to reveal as many ingredients as you would like on each trial. A message will appear once all ingredients are shown on a trial. Every time you reveal a new ingredient, there will be a 1 second delay before you can reveal another ingredient or make your decision.

        You are NOT required to view all ingredients for every sandwich, and may choose between the sandwiches with any number of ingredients presented. We encourage you to make a decision before viewing all ingredients if you strongly believe one sandwich is better than another, even if this is based on only a few ingredients.

        When you are ready to begin the study press "space".
    KeyboardComponent Past_Instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine VegQuestion
    TextComponent VegQuestionText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = $WrapAmount
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      text:
        Before trials begin, are you a vegetarian? Press 'Y' if you are a vegetarian, or press 'N' if you are NOT a vegetarian.

        (If you are a vegetarian we will only show you sandwiches without meat)
    KeyboardComponent VegResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent VeggieQuestion
      Code Type = Auto->JS
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      End Routine:
        #Translate, just if statement, True to lower case
        if (VegResp.keys[0]=='y'):
            ConfirmText=str("You said you are a vegetarian, if this is correct press 'P', if you need to edit your selection press 'Q'")

        if(VegResp.keys[0]=='n'):
            ConfirmText=str("You said you are NOT a vegetarian, if this is correct press 'P', if you need to edit your selection press 'Q'")
  Routine VegConfirm
    TextComponent text
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $ConfirmText
      wrapWidth = $WrapAmount
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    KeyboardComponent ConfirmResp
      allowedKeys = 'p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if (ConfirmResp.keys[0]== 'p'):
            if(VegResp.keys[0]=='y'):
                ConditionFile='CleanDataVeggie.csv'
                ConditionFile2='Top10IngsVeggie.csv'
            if(VegResp.keys[0]=='n'):
                ConditionFile='CleanDataMoreIng.csv'
                ConditionFile2='Top10IngsLong.csv'
            VegLoops=0
            VegQuestionLoop.finished=True
  Routine IngredientRating
    TextComponent SliderDescription
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $SlideDescr
      wrapWidth = $WrapAmount
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    SliderComponent slider
      color = $[-1.000,-1.000,-1.000]
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = '1','2','3','4','5','6','7'
      pos = (0, -0.2)
      size = (1.0, .1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RatingInstr
    TextComponent RatingInstrText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = $WrapAmount
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      text:
        You are almost done!
        We have 10 more quick questions asking you to rate some of the ingredients you just saw on those sandwiches.
        For each ingredient, please use your mouse to rate it on a scale of 1 to 7, with 1 meaning you really do not like that ingredient, and 7 meaning you really like that ingredient.
        Press "space" to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initialize_rating
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        SlideDescr="Rate your preference for "+str(ingredientforslider)+"\nfrom 1 (Strongly Dislike) to 4 (Neutral) to 7 (Strongly Like). Press space to confirm your choice."
  Routine Full_Info_Sheet
    TextComponent InfoSheetTxt
      color [set every repeat] = $TextColor
      letterHeight = 0.023
      pos = (0, -.02)
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Inferring preferences in multiattribute decision making.
        Lead Researcher: Robert Thomas Cognitive Sciences, (303)-250-4134, roberjt1@uci.edu
        Faculty Sponsor: Michael Lee, Professor, Cognitive Sciences, (949)-689-0864, mdlee@uci.edu
        • Please read the information below and ask questions about anything that you do not understand.  A researcher listed above will be available to answer your questions.
        • You are being asked to participate in a research study. Participation in this study is voluntary.  You may choose to skip a question or a study procedure. You may refuse to participate or discontinue your involvement at any time without penalty or loss of benefits.  You are free to withdraw from this study at any time. If you decide to withdraw from this study you should notify the research team immediately.
        We would like you to complete an online questionnaire to learn more about how to measure individual’s preferences from the decisions they make. The questionnaire will last about 30 minutes or less. The questionnaire involves making a series of decisions about preferences for different prepared foods. You will be asked to select your preferred choice from the descriptions of two different options. The trial will begin with only a single ingredient presented, and you can either select one of the two options, or get more information by looking at another ingredient. After doing so two new options will be presented and this process will repeat for approximately 100 trials. After this series of trials, we will also ask you to rate 15 of the ingredients you saw in the questionnaire on a scale from 1 to 10 based on your preference for the ingredient.
        • Possible risks/discomforts associated with the study include getting bored or tired during the tasks. When you are halfway through the questionnaire you will be shown a screen indicating you can take a break for up to 3 minutes, although you are not required to take this break and can continue with the questionnaire at any time.
        • There are no direct benefits from participation in the study. However, this study may help to develop new models and methods for measuring individuals’ preferences, and a better understanding of how these preferences guide decision making.
        • All research data collected will be stored securely and confidentially. No audio tapes, video tapes, or pictures will be recorded or stored. All decision and response time data will be stored on secure servers hosted by https://pavlovia.org/docs/legal/terms and the Lead Researcher’s (Robert Thomas) password protected computer.
        • Researchers will use your information to conduct this study. Once the study is done using your information, we may share them with other researchers so they can use them for other studies in the future. We will not share your name or any other private identifiable information that would let the researchers know who you are. We will not ask you for additional permission to share this information.
        • You will receive extra course credit for an eligible course through the UCI Social Ecology human subjects pool. You will receive a ½ unit of course credit for each ½ hour of participation in this study. Total amount of credit you may earn for this study is ½ credit. The course instructor offering extra course credit for participation in research must provide alternatives to earn extra course credit. The alternative assignment must require equal or less time and effort for the amount of extra credit that can be earned through participation in research.
        • Questions? If you have any comments, concerns, or questions regarding this study please contact the researchers listed at the top of this form.
        • If you have questions or concerns about your rights as a research participant, you can contact the UCI Institutional Review Board by phone, (949) 824-6662, by e-mail at IRB@research.uci.edu or at 141 Innovation, Suite 250, Irvine, CA 92697.
        What is an IRB?  An Institutional Review Board (IRB) is a committee made up of scientists and non-scientists. The IRB’s role is to protect the rights and welfare of human subjects involved in research. The IRB also assures that the research complies with applicable regulations, laws, and institutional policies.

        Press 'space' if you agree to participate and continue with the study.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Study_Info_Sheet
  Routine Full_Info_Sheet
  Routine Instructions
  Routine Instructions2
  LoopInitiator VegQuestionLoop loopType="TrialHandler"
    loopType = random
    nReps = VegLoops
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    Routine VegQuestion
    Routine VegConfirm
  LoopTerminator VegQuestionLoop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $ConditionFile
    isTrials = False
    loopType = random
    nReps = 1
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    Routine Initialize
    LoopInitiator Iter loopType="TrialHandler"
      loopType = random
      nReps = 1000
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      Routine PresentSandMain
    LoopTerminator Iter
    LoopInitiator BreakConditional loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = TakeBreak
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      Routine MidwayBreak
    LoopTerminator BreakConditional
  LoopTerminator trials
  Routine RatingInstr
  LoopInitiator RatingLoop loopType="TrialHandler"
    conditionsFile = $ConditionFile2
    loopType = random
    nReps = 1
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    Routine Initialize_rating
    Routine IngredientRating
  LoopTerminator RatingLoop
  Routine End
